CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C0")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:Plasmid
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['As per the standard SIRF Cell Profiler program, the individual nuclei are identified.']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,140
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:6|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notes:['In the event of any bleed through of nuclei signal into another channel of interest, the intensities of the nuclei are measured']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
    Select images to measure:DNA
    Select objects to measure:Nuclei

FilterObjects:[module_num:7|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notes:['Nuclei with abnormal intensities and that cross over into other channels are removed.']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
    Select the objects to filter:Nuclei
    Name the output objects:Filtered_Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_DNA
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.013
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
IdentifySecondaryObjects:[module_num:8|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notes:['Individual cells are then identified from the normal nuclei']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
    Select the input objects:Filtered_Nuclei
    Name the objects to be identified:HeLa_Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:BF
    Number of pixels by which to expand the primary objects:50
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:HeLa_Cells_2
    Fill holes in identified objects?:Yes
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
EnhanceOrSuppressFeatures:[module_num:9|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notes:['The signal from the TOTO-3 plasmid is enhanced.']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
    Select the input image:Plasmid
    Name the output image:Plasmid_Enhanced
    Select the operation:Enhance
    Feature size:25
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:10|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notes:['The individual TOTO-3 labeled plasmids are identified.']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
    Select the input image:Plasmid_Enhanced
    Name the primary objects to be identified:Identified_Plasmid
    Typical diameter of objects, in pixel units (Min,Max):4,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.0006
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
RelateObjects:[module_num:11|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notes:['Transfected cells are identifed by overlapping the individual HeLa cells with the plasmid signal.']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
    Parent objects:HeLa_Cells
    Child objects:Identified_Plasmid
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:12|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notes:['Any HeLa cell that does not contain plasmid is filtered out.']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
    Select the objects to filter:HeLa_Cells
    Name the output objects:Cells_With_Plasmid
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_Identified_Plasmid_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
EnhanceOrSuppressFeatures:[module_num:13|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notes:['The signal from the biosensor is enhanced']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
    Select the input image:GFP
    Name the output image:Biosensor_Signal_Enhanced
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
MaskImage:[module_num:14|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notes:['As a precaution, only signal that is masked by the identified HeLa cells are kept for downstream analysis.']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
    Select the input image:Biosensor_Signal_Enhanced
    Name the output image:Biosensor_Signal_Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:HeLa_Cells
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:15|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notes:['The individual biosensor signal puncti are identified.']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
    Select the input image:Biosensor_Signal_Masked
    Name the primary objects to be identified:Biosensor_Signal
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.004
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
MeasureObjectIntensity:[module_num:16|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notes:['The various intensities of the biosensor signal is measured.']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
    Select images to measure:Biosensor_Signal_Masked
    Select objects to measure:Biosensor_Signal

RelateObjects:[module_num:17|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notes:['The first set of data will only apply the biosensor data to the cells identifed as transfected in the previous modules.']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
    Parent objects:Cells_With_Plasmid
    Child objects:Biosensor_Signal
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MaskObjects:[module_num:18|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notes:['A mask is generated using the objects identifed as transfected. These objects are used to remove the transfected cells from the identified HeLa Cells so that only untransfected cells are kept.']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
    Select objects to be masked:HeLa_Cells
    Name the masked objects:Untransfected_Cells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells_With_Plasmid
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

RelateObjects:[module_num:19|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notes:['The second set of data only applies the biosensor signal to the untransfected cells.']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
    Parent objects:Untransfected_Cells
    Child objects:Biosensor_Signal
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:20|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notes:['All data including biosensor signal for transfected and untransfected cells is exported separately.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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