CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C0")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['First the nuclei from the DAPI channel is identified. This is done by using the nuclei labelled images (should be designated in "NamesAndTypes"). Depending on the quality and conditions of the image and experiment respectively, the size and thresholding of the nuclei would have be changed.']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['Next the whole cell should be identified by expanding from the nucleus by 40 pixels. Depending on the quality and condition of the image and experiment respectively, this number may have to be changed. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:HeLa_Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:BF
    Number of pixels by which to expand the primary objects:40
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredCells
    Fill holes in identified objects?:Yes
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
EnhanceOrSuppressFeatures:[module_num:7|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notes:['The speckle feature is used to enhance the signal from the biosensor since it is quite small.']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
    Select the input image:GFP
    Name the output image:Biosensor_Signal_Enhanced
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
MaskImage:[module_num:8|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notes:['The enhanced biosensor signal is masked with the objects designated as "HeLa cells" (from the IdentifySecondaryObjects module) in order to exclude any rogue signal that is outside of the cells.']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
    Select the input image:Biosensor_Signal_Enhanced
    Name the output image:Biosensor_Signal_Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:HeLa_Cells
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['After masking the biosensor signal image, the biosensor signal itself is identified. This is best done manually and the thresholding would have to be done manually depending on the signal intensity obtained from the imaging experiment.']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
    Select the input image:Biosensor_Signal_Enhanced
    Name the primary objects to be identified:Biosensor_Signal
    Typical diameter of objects, in pixel units (Min,Max):3,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.007
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
MeasureObjectIntensity:[module_num:10|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notes:['This module takes all sorts of intensity measurements of the biosensor signal that will be used for single cell analysis downstream.']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
    Select images to measure:Biosensor_Signal_Masked
    Select objects to measure:Biosensor_Signal

RelateObjects:[module_num:11|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notes:['This module assigns each biosensor to its overlapping cell and also averages all of the measured object intensities from the previous module of the biosensor signal per cell.']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
    Parent objects:HeLa_Cells
    Child objects:Biosensor_Signal
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:12|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notes:['The final data sheet is exported.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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